PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = untitled
  keyboardBackend = ioHub
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Routines
  Routine Respond
    CodeComponent check_for_mouse
      Code Type = Auto->JS
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      Begin Routine:
        # Provide feedback on the response time of a mouse/touch response
        # This routine will need to follow another routine with a
        # mouse response component in it called "mouse"

        # If your experiment is missing that you will
        # not receive feedback and an error message will be displayed.

        # If a mouse component has been added and feedback is functioning.
        # 1. remove lines 12, 13, 15, 17 and 18.
        # 2. dedent line 16

        fb_text = 'no mouse component found - look at the Std out window for info'


        try:
            fb_text = 'RT: ' + str(round(mouse.time[-1]*1000)/1000) + ' seconds'#multiplying and dividing by 1000 for online compatibility (Math.Round in JS rounds to the nearest integer rather than rounding floats to a decimal place)
        except:
            print('Make sure that you have:\n1. a routine with a mouse component in it called "mouse"\n2. that data is set to store "on click"')
    MouseComponent mouse
      clickable = boundary
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    CodeComponent drawLine
      Code Type = Py
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      Begin Experiment:
        trial = data.ExperimentHandler(
            name = "trial"
        )
      Each Frame:
        if mouse.status == STARTED:  # continously drawing line so that line follows mouse
                    currentPos = mouse.getPos()
                    line = visual.Line(win = win,
                    start = [0,0],
                    lineWidth = 5,
                    end = currentPos,
                    )
    CodeComponent boundary
      Code Type = Py
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      Begin Routine:
        mouse.setPos()
        boundary = visual.Circle(
            win=win,
            name = "boundary",
            radius=.25,
            fillColor= 'Black',
            lineColor=None,
            edges=256,
            lineWidth = 1
        )

        boundary2 = visual.Circle(
            win=win,
            name = 'boundary2',
            radius=.23,
            fillColor= 'Gray',
            lineColor= None,
            edges=256,
            lineWidth = 1
        )
      Each Frame:
        boundary.draw()
        boundary2.draw()

        #mouse.setVisible(1)

        currentPos = mouse.getPos()

        #if boundary2.contains(currentPos):
        #    mouse.setVisible(0)

        if boundary.contains(currentPos) and not boundary2.contains(currentPos):
            line.draw()
      End Routine:
        mouse.setVisible(1)
    PolygonComponent fixate_4
      fillColor = 0.3255, 0.3255, 0.3255
      lineColor = 0.3255, 0.3255, 0.3255
      saveStartStop = False
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
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    CodeComponent save_response
      Code Type = Py
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      End Routine:
        place = mouse.getPos()
        if mouse.getPressed()[0] == 0: #if the left mouse button is not pressed
            response_angle = None
            thisExp.addData('response_angle',response_angle)
            upos = None
        elif mouse.getPressed()[0] == 1:
            response_angle = np.degrees(np.arctan(place[1]/-place[0])) #arctan (y/x) in mouse cordinate

            if place[1] < 0 and place[0] >0: #first quadrant
                response_angle = response_angle
            if place[1] < 0 and place[0] < 0: #second quadrant
                response_angle = response_angle + 180
            if place[1] > 0 and place[0] < 0: #3rd quadrant
                response_angle = response_angle + 180
            if place[1] > 0 and place[0] > 0:  #4th
                response_angle = 360 - abs(response_angle)

            thisExp.addData('response_angle',response_angle)
            upos = (place[0], place[1]) #user position, place they answered
        response_angle = None
  Routine Instructions
    TextComponent text_instr
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        In this task, you will see many lines at the center and in the periphery. The circle represents the head of the line, like an arrow.
        Then, a black circle will appear at the center of the screen.

        YOUR TASK IS:
        Click a point on the circle to indicate the direction the most lines were oriented in.

        WE WILL THEN ASK YOU:
        Rate how confident you felt about your answer using a scale of 1 (not confident) to 4 (very confident).

        When you are ready, use the mouse to click next to begin a practice trial.
    ImageComponent image_next
      image = next.png
      pos = (0.6, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
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    MouseComponent mouse_2
      clickable = image_next
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine dots
    PolygonComponent Fixate
      fillColor = 0.3255, 0.3255, 0.3255
      lineColor = 0.3255, 0.3255, 0.3255
      saveStartStop = False
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.0
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    DotsComponent stimuli
      coherence [set every repeat] = Coherence
      dir [set every repeat] = randint(1,359)
      dotLife = -1
      dotSize = 15
      fieldPos = (0.0, 0.0)
      fieldShape = circle
      fieldSize = .9
      nDots = 100
      noiseDots = direction
      refreshDots = none
      saveStartStop = False
      signalDots = same
      speed = 0.02
      startVal [time (s)] = 1
      stopVal [duration (s)] = .4
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    PolygonComponent Fixate2
      fillColor = 0.3255, 0.3255, 0.3255
      lineColor = 0.3255, 0.3255, 0.3255
      saveStartStop = False
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 1.4
      stopVal [duration (s)] = 1.0
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    CodeComponent save_the_direction_2
      Code Type = Py
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      Begin Routine:
        savedDirection = stimuli.dir
        #myExp.addData('actual_direction_real', savedDirection)
        thisExp.addData('actual_direction_real', savedDirection)
    CodeComponent hide_mouse_2
      Code Type = Auto->JS
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      Begin Routine:
        mouse.setVisible(0)
      End Routine:
        mouse.setVisible(0)
  Routine practicedots
    PolygonComponent Fixate_2
      fillColor = 0.3255, 0.3255, 0.3255
      lineColor = 0.3255, 0.3255, 0.3255
      saveStartStop = False
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.0
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    DotsComponent stimuli_2
      coherence = .30
      dir [set every repeat] = randint(1,359)
      dotLife = -1
      dotSize = 15
      fieldPos = (0.0, 0.0)
      fieldShape = circle
      fieldSize = .9
      nDots = 100
      noiseDots = direction
      refreshDots = none
      saveStartStop = False
      signalDots = same
      speed = 0.02
      startVal [time (s)] = 1
      stopVal [duration (s)] = .4
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    PolygonComponent Fixate2_2
      fillColor = 0.3255, 0.3255, 0.3255
      lineColor = 0.3255, 0.3255, 0.3255
      saveStartStop = False
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 1.4
      stopVal [duration (s)] = 1.0
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    CodeComponent save_the_direction
      Code Type = Py
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      Before Experiment:
        #
        #myExp = data.ExperimentHandler(name='maycee', version='',
        #    extraInfo=None, runtimeInfo=None,
        #    originPath='C:\\Users\\MaylM\\Desktop\\PsychoPy tests\\Fasano Task\\fasano task.py',
        #    savePickle=True, saveWideText=True,
        #    dataFileName='maycee')
      Begin Routine:
        savedDirection = stimuli_2.dir
        #myExp.addData('actual_direction_real', savedDirection)
        thisExp.addData('actual_direction_real', savedDirection)
    CodeComponent hide_mouse
      Code Type = Auto->JS
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      Begin Routine:
        mouse.setVisible(0)
      End Routine:
        mouse.setVisible(1)
  Routine practiceRespond
    CodeComponent check_for_mouse_2
      Code Type = Auto->JS
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      Begin Routine:
        # Provide feedback on the response time of a mouse/touch response
        # This routine will need to follow another routine with a
        # mouse response component in it called "mouse"

        # If your experiment is missing that you will
        # not receive feedback and an error message will be displayed.

        # If a mouse component has been added and feedback is functioning.
        # 1. remove lines 12, 13, 15, 17 and 18.
        # 2. dedent line 16

        fb_text = 'no mouse component found - look at the Std out window for info'


        try:
            fb_text = 'RT: ' + str(round(mouse.time[-1]*1000)/1000) + ' seconds'#multiplying and dividing by 1000 for online compatibility (Math.Round in JS rounds to the nearest integer rather than rounding floats to a decimal place)
        except:
            print('Make sure that you have:\n1. a routine with a mouse component in it called "mouse"\n2. that data is set to store "on click"')
    CodeComponent drawLine_2
      Code Type = Py
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      Each Frame:
        if mouse.status == STARTED:  # only update if started and not finished!
                    buttons = mouse.getPressed()

                    currentPos = mouse.getPos()

                    line = visual.Line(win = win,)

                    line.start = [0,0]
                    line.end = currentPos

                    line.draw()
    MouseComponent mouse_3
      clickable = boundary
      forceEndRoutineOnPress = any click
      newClicksOnly = False
      saveMouseState = on valid click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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  Routine PAS
    TextComponent text
      letterHeight = 0.05
      pos = (0, .25)
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
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      text:
        How confident are you that your answer is correct?
    SliderComponent slider
      forceEndRoutine = True
      granularity = 1
      labels = 1, 2, 3, 4
      letterHeight = 0.05
      saveStartStop = False
      size = (1.0, 0.1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
      styles = rating
      ticks = (1, 2, 3, 4)
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  Routine BeginTask
    TextComponent text_instr_2
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        You have reached the end of the practice trial. Please ask any remaining questions now. Try to be as accurate and fast as you can. There will be no feedback given for the remaining trials.
        Click Next to start the task.
    ImageComponent image_next_2
      image = next.png
      pos = (0.6, -0.4)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_4
      clickable = image_next
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      startVal [time (s)] = 0.0
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  Routine fixation
    PolygonComponent fixate
      fillColor = 0.3255, 0.3255, 0.3255
      lineColor = 0.3255, 0.3255, 0.3255
      saveStartStop = False
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0
      stopVal [duration (s)] = .25
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  Routine noise
    PolygonComponent Fixate_5
      fillColor = 0.3255, 0.3255, 0.3255
      lineColor = 0.3255, 0.3255, 0.3255
      saveStartStop = False
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
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    CodeComponent code_2
      Code Type = Py
      Begin Experiment:
        from psychopy import visual, core, event
        from psychopy.tools.coordinatetools import cart2pol
        import numpy
        import math
      Begin Routine:
        N = 30
        fieldSize = 900
        elemSize = 13
        center = [0,0]
        radius = fieldSize / 2.0

        def newpos(): #this function generates a single random cordinate given the radius
            cords = [] #new empty array
            randrad = numpy.random.uniform(0, radius) #generate a random radius between 0 and the max radius #Adding r/2 keeps them from spawning outside of circle
            randdir = numpy.random.randint(0,359)
            xcord = randrad * math.cos(math.radians(randdir))
            cords = [xcord, xcord * math.tan(math.radians(randdir))]
            return cords


        def firstgen(N): #generate a list of cordinates given the N
            first = []
            i=0
            while i < N:
                first.append(newpos())
                i = i + 1

        xys = firstgen(N)

        globForm = visual.ElementArrayStim(win,
            fieldShape = 'circle',
            nElements=N,
            sizes=elemSize,
            elementTex = None,
            elementMask = 'circle',
            xys= xys,
            fieldSize = fieldSize,
            units = 'pix'
            )

        #Generate a List of directions for each dot
        def initDir(sd):
            newXY = globForm.xys
            dirlist = []
            g=0
            while g < len(newXY):
                dirlist.append(numpy.random.normal(dir, sd)) #construct a list of normally distributed directions based on the singular direction list
                g = g + 1
            return dirlist

        #Note: newXY is a list of corYnates, so i think i can just do newXY[i] to replace the cordinate at that position maybe

        def reviveDir(sd, dirlist):
            newXY = globForm.xys
            i = 0
            while i < len(newXY): #look at each point in the list
                newXY[i, 0] = newXY[i, 0] + (startrad * math.cos(dirlist[i])) #add on distance to travel
                newXY[i, 1] =  newXY[i, 1] + (startrad * math.sin(dirlist[i]))
                if math.dist(newXY[i], center) > radius:
                    newXY[i] = newpos()
                i = i + 1 #go to the next person in line
                #initDir(1) #Adding in this function makes it slower but makes it so less dots are moving in a line
            return newXY #then return a new list to reset all dots at once


        dir = math.radians(numpy.random.randint(0,359)) #there is one direction the dots must move to
        startrad = 10 #10 with no Initdir in Revive Dir, but 20 with
        directions = initDir(.5) #Only generate this one time! to keep the same direction for all dots!

        dotsTimer = core.CountdownTimer(2)  # Start a 1 second countdown when 5 is done
      Each Frame:
        if stimuli_3.status == STARTED: #starts right after Fixate 5, which is too early for global to run
            while dotsTimer.getTime() > 0:
               newXY = reviveDir(1, dirlist = directions)
               globForm.xys = newXY
               globForm.draw()
               win.flip()
               event.clearEvents('mouse')  # only really needed for pygame windows
      End Routine:
        dotsTimer.reset() #This timer isn't getting created because Fixate 5 isn't finishing? Oh no


        ###NOTES
        #THE LOCAL RUNS BEFORE THE GLOBAL RUNS, THE GLOBAL WAITS FOR THE LOCAL TO BE FINISHED.
        #GLOBAL NEEDS TO RUN EARLIER
    DotsComponent stimuli_3
      coherence = 1
      dir [set every repeat] = randint(1,359)
      dotLife = -1
      dotSize = 15
      fieldPos = (0.0, 0.0)
      fieldShape = circle
      fieldSize = 1.0
      nDots = 70
      noiseDots = direction
      refreshDots = none
      saveStartStop = False
      signalDots = same
      speed = 0.01
      startEstim = 1
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1
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    PolygonComponent Fixate_6
      fillColor = 0.3255, 0.3255, 0.3255
      lineColor = 0.3255, 0.3255, 0.3255
      saveStartStop = False
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1
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  Routine local
    PolygonComponent Fixate_3
      fillColor = 0.3255, 0.3255, 0.3255
      lineColor = 0.3255, 0.3255, 0.3255
      saveStartStop = False
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.0
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    CodeComponent code
      Code Type = Py
      Begin Experiment:
        from psychopy import visual, core, event
        from psychopy.tools.coordinatetools import cart2pol
        import numpy
        import math
      Begin Routine:
        N = 100
        fieldSize = 900
        elemSize = 13
        center = [0,0]
        radius = fieldSize / 2.0

        def newpos(): #this function generates a single random cordinate given the radius
            cords = [] #new empty array
            randrad = numpy.random.uniform(0, radius) #generate a random radius between 0 and the max radius #Adding r/2 keeps them from spawning outside of circle
            randdir = numpy.random.randint(0,359)
            xcord = randrad * math.cos(math.radians(randdir))
            cords = [xcord, xcord * math.tan(math.radians(randdir))]
            return cords


        def firstgen(N): #generate a list of cordinates given the N
            first = []
            i=0
            while i < N:
                first.append(newpos())
                i = i + 1

        xys = firstgen(N)

        globForm = visual.ElementArrayStim(win,
            fieldShape = 'circle',
            nElements=N,
            sizes=elemSize,
            elementTex = None,
            elementMask = 'circle',
            xys= xys,
            fieldSize = fieldSize,
            units = 'pix'
            )

        #Generate a List of directions for each dot
        def initDir(sd):
            newXY = globForm.xys
            print(newXY)
            dirlist = []
            g=0
            while g < len(newXY):
                dirlist.append(numpy.random.normal(dir, sd)) #construct a list of normally distributed directions based on the singular direction list
                g = g + 1
            return dirlist

        #Note: newXY is a list of corYnates, so i think i can just do newXY[i] to replace the cordinate at that position maybe

        def reviveDir(sd, dirlist):
            newXY = globForm.xys
            i = 0
            while i < len(newXY): #look at each point in the list
                newXY[i, 0] = newXY[i, 0] + (startrad * math.cos(dirlist[i])) #add on distance to travel
                newXY[i, 1] =  newXY[i, 1] + (startrad * math.sin(dirlist[i]))
                if math.dist(newXY[i], center) > radius:
                    newXY[i] = newpos()
                i = i + 1 #go to the next person in line
                #initDir(1) #Adding in this function makes it slower but makes it so less dots are moving in a line
            return newXY #then return a new list to reset all dots at once


        dir = math.radians(numpy.random.randint(0,359)) #there is one direction the dots must move to
        startrad = 10 #10 with no Initdir in Revive Dir, but 20 with
        directions = initDir(.5) #Only generate this one time! to keep the same direction for all dots!

        dotsTimer = core.CountdownTimer(2)  # countdown for
      Each Frame:
        if Fixate_3.status == FINISHED:
            while dotsTimer.getTime() > 0:
                newXY = reviveDir(1, dirlist = directions)
                globForm.xys = newXY
                globForm.draw()
                win.flip()
                event.clearEvents('mouse')  # only really needed for pygame windows
    PolygonComponent Fixate_4
      fillColor = 0.3255, 0.3255, 0.3255
      lineColor = 0.3255, 0.3255, 0.3255
      saveStartStop = False
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1
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  Routine BeginTask_2
    TextComponent text_instr_3
      letterHeight = 0.04
      pos = (-0.3, 0.25)
      startVal [time (s)] = 0.0
      text = $"This is a template" + " \n on how to use" + "\n the text component" + " \n to present instructions."
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    ImageComponent image_instr1
      image = instruct1.png
      pos = (-0.3, 0)
      startVal [time (s)] = 0.0
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    ImageComponent image_instr2
      image = instruct2.png
      pos = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent image_illus
      image = click.png
      pos = (0.3, 0)
      startVal [time (s)] = 0.0
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    ImageComponent image_next_3
      image = next.png
      pos = (0.6, -0.4)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_5
      clickable = image_next
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine FixData
  Routine practicelines
    CodeComponent code_4
      Code Type = Py
      Before Experiment:
        import math
        import numpy as np
        import copy
        import random
      Begin Experiment:
        N = 200
        #THE RANGE OF THE MONITOR CHANGES THE DIMENSIONS, SO YOU NEED TO CHANGE THE RANGE ACCORDING TO THE MONITOR
        winx = .8 #this corresponds to the width units of the x plane according to the width (1080)
        winy = .5 #(1920)
        center = [0,0]
        radius = .3
        '''
        def cencoords(): #generates a single center line coordinate
            cords = [] #new empty array
            randrad = np.random.uniform(0, radius) #generate a random number no greater then the radius
            randdir = np.random.uniform(0,360) #generate
            xcord = randrad * math.cos(math.radians(randdir)) #convert to radial coords and generate an x cord
            cords = [xcord, xcord * math.tan(math.radians(randdir))] #also make a y coord
            return cords
        '''
        def testcencords(space):
            first = [] #new empty array
            i=0
            numl = math.floor(N*space)
            listdir = random.sample(range(360), numl) #generate a list of integers between 0-359
            #seqorad = np.linspace(0, radius, num = 176) #gen seq of radii to pull from
            #listrad = random.sample(seqorad, numl)
            while i < numl:
                randrad = np.random.uniform(0, radius)
                randdir = listdir[i]
                xcord = randrad * math.cos(math.radians(randdir)) #convert to radial coords and generate an x cord
                cords = [xcord, xcord * math.tan(math.radians(randdir))]
                first.append(cords)
                i = i + 1
            return first

        def newpercoords(): #generate a single peripheral coordinate
            cords =  [np.random.uniform(-winx, winx), np.random.uniform(-winy, winy)]
            while math.dist(cords, center) < radius:
                cords =  [np.random.uniform(-winx, winx), np.random.uniform(-winy, winy)]
            return cords

        '''
        def testpercoords(space): #generate a list of cordinates given the method to generate
            first = []
            numl = math.floor(N*space)
            i=0
            while i < numl:
                cords =  [np.random.uniform(-winx, winx), np.random.uniform(-winy, winy)]
                while math.dist(cords, center) < radius:
                    cords =  [np.random.uniform(-winx, winx), np.random.uniform(-winy, winy)]
                first.append(cords)
            return first
        '''

        #nlines = the number of lines in the cente or the peripheral ncen or nper
        #plines = porportion of lines going in a direction CLOA or PLOB
        #ort = the angle of the drection oricen or oriper

        def genoris(nlines, plines, ort): #this function will generate a list of orientations given whether it is peripheral or center and the orientation needed
            orilist = []
            i = 0
            j = 0
            while i < math.floor(nlines * plines): #this will calculate the number of lines going in the designated direction
                orilist.append(ort)
                i = i + 1
            while j <= math.floor(nlines * (1 - plines)):
                orilist.append(np.random.uniform(0,360))
                j = j + 1
            return orilist

        def gencoords(function,space): #generate a list of cordinates given the method to generate
            first = []
            i=0
            while i <= math.floor(N*space):
                first.append(function())
                i = i + 1
            return first

        def linestocords(coordinates, orientation): #given cordinates and orientation, convert them to the cordinates for the circles at the end of the lines)
            circcords = copy.deepcopy(coordinates)
            for cord in circcords:
                angle = math.radians(orientation[i] + 180)
                cord = [circcords[i][0] + (math.cos(angle) * -.025), circcords[i][1] + (math.sin(angle) * .025)]
            return circcords
      Begin Routine:
        mouse.setVisible(0)

        if PCL == None:
            practicetrial.finished=True
            continueRoutine = False

        ncen = math.floor(N * PCL) #number of lines in the center
        nper = math.floor(N * PPL) #number of lines in the peripheral

        #generate cordinates
        centercoordinates = testcencords(PCL)
        outercoordinates = gencoords(newpercoords, PPL)

        #generate a list of orientations for every line
        oricen = np.random.uniform(0,330) #This is the wrong direction and centers are in this direction
        oriper = oricen + 30 #this is the right direction, and peripherals are in this direction

        cenoris = genoris(ncen,PCLOA,oricen)
        peroris = genoris(nper,PPLOB,oriper)

        #using the above lists, generate coords for the circles at the end of the lines

        def linestocords(coordinates, orientation): #given cordinates and orientation, convert them to the cordinates for the circles at the end of the lines)
            circcords = copy.deepcopy(coordinates)
            i = 0
            while i < len(circcords):
                angle = math.radians(orientation[i] + 180)
                circcords[i][0] = circcords[i][0] + (math.cos(angle) * -.025)
                circcords[i][1] = circcords[i][1] + (math.sin(angle) * .025)
                i = i + 1
            return circcords


        cencircoords = linestocords(centercoordinates, cenoris)
        percircoords = linestocords(outercoordinates, peroris)

        #generate 4 types of elements (center and peripheral lines and circles)
        cenlines = visual.ElementArrayStim(win, nElements=ncen, sizes=[.05,0.0009], sfs=0, elementTex=np.ones([16,16]), xys = centercoordinates, colors=[-1,-1,-1],oris=cenoris, texRes=16, colorSpace='rgb',elementMask= 'none', units='height', interpolate=False)
        perlines = visual.ElementArrayStim(win, nElements=nper, sizes=[.05,0.0009], sfs=0, elementTex=np.ones([16,16]), xys = outercoordinates, colors=[-1,-1,-1],oris=peroris, texRes=16, colorSpace='rgb',elementMask= 'none', units='height', interpolate=False)

        cencirc = visual.ElementArrayStim(win, nElements=ncen, sizes=.01, elementTex = np.ones([16,16]), elementMask = 'circle',xys= cencircoords, oris = 0, units = 'height', colors=[-1,-1,-1])
        percirc = visual.ElementArrayStim(win, nElements=nper, sizes=.01, elementTex = np.ones([16,16]), elementMask = 'circle',xys= percircoords, oris = 0, units = 'height', colors=[-1,-1,-1])


        #fixate cross
        fixate_3 = visual.ShapeStim(
            win=win, name='fixate_3', vertices='cross',
            size=(0.05, 0.05),
            ori=0.0, pos=(0, 0), anchor='center',
            lineWidth=1.0,     colorSpace='rgb',  lineColor=[0.3255, 0.3255, 0.3255], fillColor=[0.3255, 0.3255, 0.3255],
            opacity=None, depth=0.0, interpolate=True)


        #display those elements
        fixate_3.draw()
        cenlines.draw()
        perlines.draw()
        cencirc.draw()
        percirc.draw()
        win.update()

        thisExp.addData('non-dominant_direction', oricen)
        thisExp.addData('dominant_correct_direction', oriper)
        '''
        thisExp.addData('PCLOA', PCLOA)
        thisExp.addData('PPLOB', PPLOB)
        thisExp.addData('PCL', PCL)
        thisExp.addData('PPL', PPL)
        '''
        core.wait(1.0)
      End Routine:
        mouse.setVisible(1)
  Routine lines
    CodeComponent code_5
      Code Type = Py
      Before Experiment:
        import math
        import numpy as np
      Begin Experiment:
        N = 200
        #THE RANGE OF THE MONITOR CHANGES THE DIMENSIONS, SO I NEED TO CHANGE THE RANGE ACCORDING TO THE MONITOR
        winx = .8 #this corresponds to the width units of the x plane according to the width (1080)
        winy = .5 #(1920)
        center = [0,0]
        radius = .3

        def cencoords(): #generates a single center line coordinate
            cords = [] #new empty array
            randrad = np.random.uniform(0, radius) #generate a random number no greater then the radius
            randdir = np.random.uniform(0,360) #generate
            xcord = randrad * math.cos(math.radians(randdir)) #convert to radial coords and generate an x cord
            cords = [xcord, xcord * math.tan(math.radians(randdir))] #also make a y coord
            return cords

        def newpercoords(): #generate a single peripheral coordinate
            cords =  [np.random.uniform(-winx, winx), np.random.uniform(-winy, winy)]
            while math.dist(cords, center) < radius:
                cords =  [np.random.uniform(-winx, winx), np.random.uniform(-winy, winy)]
            return cords

        def testcencords(space):
            first = [] #new empty array
            i=0
            numl = math.floor(N*space)
            listdir = random.sample(range(360), numl) #generate a list of integers between 0-359
            #seqorad = np.linspace(0, radius, num = 176) #gen seq of radii to pull from
            #listrad = random.sample(seqorad, numl)
            while i < numl:
                randrad = np.random.uniform(0, radius)
                randdir = listdir[i]
                xcord = randrad * math.cos(math.radians(randdir)) #convert to radial coords and generate an x cord
                cords = [xcord, xcord * math.tan(math.radians(randdir))]
                first.append(cords)
                i = i + 1
            return first


        #nlines = the number of lines in the cente or the peripheral ncen or nper
        #plines = porportion of lines going in a direction CLOA or PLOB
        #ort = the angle of the drection oricen or oriper

        def genoris(nlines, plines, ort): #this function will generate a list of orientations given whether it is peripheral or center and the orientation needed
            orilist = []
            i = 0
            j = 0
            while i < math.floor(nlines * plines): #this will calculate the number of lines going in the designated direction
                orilist.append(ort)
                i = i + 1
            while j <= math.floor(nlines * (1 - plines)):
                orilist.append(np.random.uniform(0,360))
                j = j + 1
            return orilist

        def gencoords(function,space): #generate a list of cordinates given the method to generate
            first = []
            i=0
            while i < math.floor(N*space):
                first.append(function())
                i = i + 1
            return first

        def linestocords(coordinates, orientation): #given cordinates and orientation, convert them to the cordinates for the circles at the end of the lines)
            circcords = copy.deepcopy(coordinates)
            i = 0
            while i < len(circcords):
                if orientation[i] < 180 and orientation[i] >= 0:
                    circcords[i][0] = coordinates[i][0] - (math.cos(math.radians(orientation[i])) * .025) #the .25 comes from half of the line length)
                    circcords[i][1] = coordinates[i][1] + (math.sin(math.radians(orientation[i])) * .025)
                elif orientation[i] > 180 and orientation[i] < 360:
                    circcords[i][0] = coordinates[i][0] + (math.cos(math.radians(orientation[i])) * .025) #the .25 comes from half of the line length)
                    circcords[i][1] = coordinates[i][1] - (math.sin(math.radians(orientation[i])) * .025)
                i = i + 1
            return circcords
      Begin Routine:
        mouse.setVisible(0)
        ncen = math.floor(N * CL) #number of lines in the center
        nper = math.floor(N * PL) #number of lines in the peripheral

        centercoordinates = testcencords(CL)
        outercoordinates = gencoords(newpercoords, PL)

        oricen = np.random.uniform(1,330) #This is the wrong direction and centers are in this direction
        oriper = oricen + 30 #this is the right direction, and peripherals are in this direction

        cenoris = genoris(ncen,CLOA,oricen)
        peroris = genoris(nper,PLOB,oriper)

        cencircoords = linestocords(centercoordinates, cenoris)
        percircoords = linestocords(outercoordinates, peroris)

        cenlines = visual.ElementArrayStim(win, nElements=ncen, sizes=[.05,0.0009], sfs=0, elementTex=np.ones([16,16]), xys = centercoordinates, colors=[-1,-1,-1],oris=cenoris, texRes=16, colorSpace='rgb',elementMask= 'none', units='height', interpolate=False)
        perlines = visual.ElementArrayStim(win, nElements=nper, sizes=[.05,0.0009], sfs=0, elementTex=np.ones([16,16]), xys = outercoordinates, colors=[-1,-1,-1],oris=peroris, texRes=16, colorSpace='rgb',elementMask= 'none', units='height', interpolate=False)

        cencirc = visual.ElementArrayStim(win, nElements=ncen, sizes=.01, elementTex = np.ones([16,16]), elementMask = 'circle',xys= cencircoords, oris = 0, units = 'height', colors=[-1,-1,-1])
        percirc = visual.ElementArrayStim(win, nElements=nper, sizes=.01, elementTex = np.ones([16,16]), elementMask = 'circle',xys= percircoords, oris = 0, units = 'height', colors=[-1,-1,-1])



        #fixate cross
        fixate_3 = visual.ShapeStim(
            win=win, name='fixate_3', vertices='cross',
            size=(0.05, 0.05),
            ori=0.0, pos=(0, 0), anchor='center',
            lineWidth=1.0,     colorSpace='rgb',  lineColor=[0.3255, 0.3255, 0.3255], fillColor=[0.3255, 0.3255, 0.3255],
            opacity=None, depth=0.0, interpolate=True)




        thisExp.addData('non-dominant_direction', oricen)
        thisExp.addData('dominant_correct_direction', oriper)
        thisExp.addData('CLOA', CLOA)
        thisExp.addData('PLOB', PLOB)
        thisExp.addData('CL', CL)
        thisExp.addData('PL', PL)


        fixate_3.draw()
        cenlines.draw()
        perlines.draw()
        cencirc.draw()
        percirc.draw()
        win.update()

        core.wait(1.0)
      End Routine:
        mouse.setVisible(1)
  Routine feedback
    CodeComponent boundary_2
      Code Type = Py
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      Begin Routine:
        boundary = visual.Circle(
            win=win,
            name = "boundary",
            radius=.25,
            fillColor= 'Black',
            lineColor=None,
            edges=256,
            lineWidth = 1
        )

        boundary2 = visual.Circle(
            win=win,
            name = 'boundary2',
            radius=.23,
            fillColor= 'Gray',
            lineColor= None,
            edges=256,
            lineWidth = 1
        )
      Each Frame:
        boundary.draw()
        boundary2.draw()
      End Routine:
        mouse.setVisible(1)
    MouseComponent mouse_6
      clickable = image_next_4
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      saveStartStop = False
      startVal [time (s)] = 0.0
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    ImageComponent image_next_4
      image = next.png
      pos = (0.6, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Code Type = Py
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      Begin Routine:
        if upos != None:
            uans = visual.Circle(
                win=win,
                name = "boundary",
                radius=.02,
                fillColor= 'Orange',
                lineColor=None,
                edges=128,
                pos = upos,
                lineWidth = 1
            )
        elif upos == None:
            uans = visual.TextStim(
                win = win,
                text = "No Answer",
                color = "Orange",
                height = .08,
                italic = True,
                anchorHoriz = "center"
            )



        correctcords = (math.cos(math.radians(oriper + 180)) * -.24,  math.sin(math.radians(oriper + 180)) * .24)#the .25 comes from half of the line length)



        cans = visual.Circle(
                win=win,
                name = "boundary",
                radius=.02,
                fillColor= 'Blue',
                lineColor=None,
                edges=128,
                pos = correctcords,
                lineWidth = 1
            )

        feedbacktext = visual.TextStim(
                win = win,
                text = "You Answered (Orange) \n Correct Answer (Blue)",
                color = "Black",
                italic = True,
                height = .05,
                pos = (0, .4)
            )
      Each Frame:
        feedbacktext.draw()
        cans.draw()
        uans.draw()
      End Routine:
        win.update()
  Routine blank
    CodeComponent code_6
      Code Type = Py
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      Begin Routine:
        mouse.setVisible(0)
      End Routine:
        win.update()
        PASrt = slider.rt #define the response time in seconds
        if len(mouse.time) > 0:
            Resrt = mouse.time[0] #save rt of mouse?
        else:
            Resrt = 0
        if len(mouse_6.time) > 0:
            fbrt = mouse_6.time[0]
        else:
            fbrt = 0
        if slider.rt == None:
            PASrt = 0
        else:
            PASrt = slider.rt #define the response time in seconds
        extratime = 7.75 - (PASrt + Resrt + fbrt)
        core.wait(extratime)
        mouse.setVisible(1)
Flow
  Routine Instructions
  LoopInitiator practicetrial loopType="TrialHandler"
    Selected rows = 0:5
    conditionsFile = practiceconditions.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'PCLOA': 0.25, 'PPLOB': 0.75, 'PCL': 0.25, 'PPL': 0.75},
      {'PCLOA': 0.25, 'PPLOB': 0.75, 'PCL': 0.35, 'PPL': 0.65},
      {'PCLOA': 0.25, 'PPLOB': 0.75, 'PCL': 0.45, 'PPL': 0.55},
      {'PCLOA': 0.35, 'PPLOB': 0.65, 'PCL': 0.25, 'PPL': 0.75},
      {'PCLOA': 0.35, 'PPLOB': 0.65, 'PCL': 0.35, 'PPL': 0.65},
      {'PCLOA': None, 'PPLOB': None, 'PCL': None, 'PPL': None},
      {'PCLOA': None, 'PPLOB': None, 'PCL': None, 'PPL': None},
      {'PCLOA': None, 'PPLOB': None, 'PCL': None, 'PPL': None},
      {'PCLOA': None, 'PPLOB': None, 'PCL': None, 'PPL': None}]
    Routine fixation
    Routine practicelines
    Routine fixation
    Routine Respond
    Routine fixation
    Routine PAS
    Routine feedback
    Routine blank
  LoopTerminator practicetrial
  Routine BeginTask
  LoopInitiator globalblock loopType="TrialHandler"
    conditionsFile = lineconditions.xlsx
    loopType = sequential
    nReps = 20
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    conditions:
      [{'CLOA': 0.25, 'PLOB': 0.75, 'CL': 0.25, 'PL': 0.75},
      {'CLOA': 0.25, 'PLOB': 0.75, 'CL': 0.35, 'PL': 0.65},
      {'CLOA': 0.25, 'PLOB': 0.75, 'CL': 0.45, 'PL': 0.55},
      {'CLOA': 0.35, 'PLOB': 0.65, 'CL': 0.25, 'PL': 0.75},
      {'CLOA': 0.35, 'PLOB': 0.65, 'CL': 0.35, 'PL': 0.65},
      {'CLOA': 0.35, 'PLOB': 0.65, 'CL': 0.45, 'PL': 0.55},
      {'CLOA': 0.45, 'PLOB': 0.55, 'CL': 0.25, 'PL': 0.75},
      {'CLOA': 0.45, 'PLOB': 0.55, 'CL': 0.35, 'PL': 0.65},
      {'CLOA': 0.45, 'PLOB': 0.55, 'CL': 0.45, 'PL': 0.55}]
    Routine fixation
    Routine lines
    Routine fixation
    Routine Respond
    Routine fixation
    Routine PAS
    Routine blank
  LoopTerminator globalblock
